PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1, -1, -1]
  expName = corsi_blocks
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        กดปุ่มเพื่อดำเนินการต่อ
    MouseComponent mouse_instructions
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent end_task_t_2
      Code Type = Auto->JS
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      End Routine:
        if mouse_instructions.isPressedIn(Play):
            corsi_task_t.finished = True

        if mouse_instructions.isPressedIn(Back):
            corsi_task_t.finished = False
    TextboxComponent Play
      bold = False
      editable = False
      fillColor = darkgrey
      letterHeight = 0.05
      pos = (0.25, -0.25)
      size = (0.3, 0.1)
      startVal [condition] = show
      text = ไปต่อ
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    TextboxComponent Back
      bold = False
      editable = False
      fillColor = darkgrey
      letterHeight = 0.05
      pos = (-0.25, -0.25)
      size = (0.3, 0.1)
      startVal [condition] = show
      text = เล่นอีกครั้ง
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  Routine ISI
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    TextComponent blank
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    CodeComponent setLocations
      Code Type = Auto->JS
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      Begin Experiment:
        # start with 3 coloured blocks
        nBlocks = 3
      Begin Routine:
        # create 9 blocks that shows sequence
        blocks = [blk1_3, blk2_3, blk3_3, blk4_3, blk5_3, blk6_3, blk7_3, blk8_3, blk9_3]

        # create 9 response blocks
        respond_blocks = [blk1, blk2, blk3, blk4, blk5, blk6, blk7, blk8, blk9]

        # set the required number of blocks to visible
        block_order = []
        correct_order = []
        respond_block_order = []
        for block in range(nBlocks):
            blocks[block].setColor('white')
            respond_blocks[block].setColor('white')
            # responses will be saved as string so we need the correct answer to be in string format
            correct_order.append(respond_blocks[block].name)
            # populate list with coloured block sequence
            block_order.append(blocks[block])
            respond_block_order.append(respond_blocks[block])
        print("block_order", block_order)
        print("correct_order", correct_order)
        print("respond_block_order", respond_block_order)

        # Reverse the correct_order based on nBlocks
        correct_order.reverse()
        thisExp.addData('correct_order', correct_order)


        # set the position of blocks to be random
        # preset some random locations so that the boxes never overlap
        xys = [[0.25625, 0.0975], [0.0675, 0.07375], [-0.09875, 0.065], [-0.26625, 0.235], [0.22, 0.2425], [0.16625, 0.3825], [-0.18625, 0.41125], [-0.01875, 0.235], [-0.3575, -0.05625], [-0.12125, -0.12625], [0.05875, -0.0575], [0.19375, -0.17125], [0.30125, -0.0175], [0.4125, -0.1325], [0.365, -0.27625], [-0.01125, -0.295], [-0.285, -0.27125], [-0.4075, 0.11875], [-0.485, 0.34625], [0.4625, 0.35875], [0.45375, 0.175], [0.54, 0.03625], [0.62875, -0.1825], [0.57875, -0.31375], [-0.45875, -0.3], [-0.55125, -0.13375], [-0.6025, 0.0725], [-0.675, 0.29875], [-0.68625, -0.225], [0.03125, -0.41], [0.1925, -0.295], [-0.16125, -0.28], [-0.24625, 0.04375], [-0.0225, 0.395], [0.28875, 0.39875], [0.6375, 0.27375], [-0.35125, 0.36625]]

        # randomise the coordinates
        shuffle(xys)
        count = 0 # used to iterate through list
        positions = []
        for block in blocks:
            # keep the same block positions
            block.setPos([xys[count][0], xys[count][1]])
            respond_blocks[count].setPos([xys[count][0], xys[count][1]])

            positions.append(xys[count])

            count += 1

        # save positions used to csv output
        thisExp.addData('positions', positions)
  Routine corsi_present
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    CodeComponent setColor
      Code Type = Both
      Begin JS Routine:
        block_order[block_sequence.thisN].fillColor = new util.Color("red")
        console.log(block_order[block_sequence.thisN].pos);
        console.log(block_order[block_sequence.thisN].opacity);
      Begin Routine:
        # set the block to red
        block_order[block_sequence.thisN].fillColor = "red"
        print(block_order[block_sequence.thisN].pos)
        print(block_order[block_sequence.thisN].opacity)
      End JS Routine:
        block_order[block_sequence.thisN].fillColor = new util.Color([1, 1, 1])
      End Routine:
        # reset the block colour
        block_order[block_sequence.thisN].fillColor = [1, 1, 1]
    PolygonComponent blk1_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk2_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk3_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk4_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk5_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk6_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk7_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk8_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent blk9_3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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  Routine corsi_respond
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    PolygonComponent blk1
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk4
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk5
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk6
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk7
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk8
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk9
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent corsi_mouse
      clickable = blk1, blk2, blk3, blk4, blk5, blk6, blk7, blk8, blk9
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent check_correct
      Code Type = Auto->JS
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      Begin Routine:
        # list to keep track which blocks was clicked
        order_clicked = []

        # attribute to show the Submit button
        show = False
      Each Frame:
        for block in respond_blocks:
            if corsi_mouse.isPressedIn(block):
                # change clicked block to red
                block.fillColor = [1, 0, 0]
                # prevent list from being populated repeatedly with same block while mouse is being held
                if block.name not in order_clicked:
                    order_clicked.append(block.name)

        # show submit button if amount of blocks clicked is the same as sequence number
        if len(corsi_mouse.clicked_name)==nBlocks:
            show = True

        if corsi_mouse.isPressedIn(submit_button):
            continueRoutine = False
      End Routine:
        # create a variable to store accuracy
        correct = 0
        print('order_clicked', order_clicked)
        print('correct_order', correct_order)

        # create a list to store accuracy
        correct_list = []
        count = 0
        for name in order_clicked:
            if name == correct_order[count]:
                correct_list.append(1) # add value of 1 if block clicked matches the correct order
            else:
                correct_list.append(0) # add 0 if no match
            count += 1
        print(correct_list)
        # e.g. list - [1,1,1] for 3 sequences block

        # save list to csv output
        thisExp.addData('correct_list', correct_list)

        # if the sum of list is equals to number of sequence, the trial is correct
        if sum(correct_list) == len(correct_list):
            correct = 1

        # save correct variable to csv output
        thisExp.addData('corsi_correct', correct)

        # increase number of blocks if they get it correct
        if correct:
            nBlocks += 1


        # cap the number of blocks at the max number
        if nBlocks > len(blocks):
            nBlocks = len(blocks)
    TextboxComponent submit_button
      bold = False
      editable = False
      fillColor = darkgrey
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = (0.2, 0.1)
      startVal [condition] = show
      text = Submit
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  Routine feedback
    RoutineSettingsComponent feedback
      saveStartStop = False
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    CodeComponent fbcode
      Code Type = Auto->JS
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      Begin Routine:
        # if the sequence clicked was correct
        if correct:
            thisfb = 'Correct!'
            fbcol = 'green'
        else: # if the sequence clicked was wrong
            thisfb = 'Incorrect!'
            fbcol = 'red'
    TextComponent fbtxt
      color [set every repeat] = $fbcol
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $thisfb
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    CodeComponent reset_col_code_t
      Code Type = Both
      Begin JS Routine:
        for (var block, _pj_c = 0, _pj_a = respond_blocks, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            block = _pj_a[_pj_c];
            block.fillColor = new util.Color([1 ,1, 1])
        }

        for (var block, _pj_c = 0, _pj_a = blocks, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            block = _pj_a[_pj_c];
            block.fillColor = new util.Color([1 ,1, 1])
        }
      Begin Routine:
        # reset the colour of all blocks in prep for next trial
        for block in respond_blocks:
            block.fillColor = [1 ,1, 1]

        for block in blocks:
            block.fillColor = [1 ,1, 1]
    CodeComponent end_task_t
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        incorrect_count = 0
      End Routine:
        if not correct:
            incorrect_count += 1

        if incorrect_count > 3:
            corsi_task.finished = True
  Routine end
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    CodeComponent code_2
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        // let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
        //     console.log(dataObj)
        //     return Object.values(it).toString()
        // }).join('\n')

        // Extract all unique keys from the JSON objects
        const allKeys = [...new Set(dataObj.flatMap(obj => Object.keys(obj)))];

        // Convert JSON to CSV format
        const csvRows = [];

        // Add header row
        csvRows.push(allKeys.join(','));

        // Add data rows
        for (const obj of dataObj) {
            const row = allKeys.map(key => obj[key] !== undefined ? `"${obj[key]}"` : '');
            csvRows.push(row.join(','));
        }

        // Change to CSV file
        const data = csvRows.join('\n');

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '/',
            },
            body: JSON.stringify({
                experimentID: 'qiFeD3kGxmCO', // ⭑ UPDATE WITH YOUR DATAPIPE EXPERIMENT ID ⭑
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Your maximum blocks remembered was: ' + str(nBlocks-1)
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  Routine Welcome
    RoutineSettingsComponent Welcome
      saveStartStop = False
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    TextComponent text_Welcome
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text [set every repeat]:
        $text_tutorial
    MouseComponent mouse_Welcome
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine countdown
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    TextComponent text_3
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text = 3
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    TextComponent text_2
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text = 2
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    TextComponent text_1
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text = 1
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  Routine instructions_t
    RoutineSettingsComponent instructions_t
      saveStartStop = False
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    ImageComponent image_t
      image [set every repeat] = $photo
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_instructions_t
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine corsi_present_t
    RoutineSettingsComponent corsi_present_t
      saveStartStop = False
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    PolygonComponent box1
      fillColor [set every repeat] = $CL
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent box2
      fillColor [set every repeat] = $CL2
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent box3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent box4
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent box5
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent box6
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent box7
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent box8
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent box9
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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  Routine ISI_t
    RoutineSettingsComponent ISI_t
      saveStartStop = False
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    CodeComponent code_t2
      Code Type = Auto->JS
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      Begin Experiment:
        nBlocks = 2
      Begin Routine:
        # create 9 blocks that shows sequence
        blocks = [box1, box2, box3, box4, box5, box6, box7, box8, box9]

        # create 9 response blocks
        respond_blocks = [box1_2, box2_2, box3_2, box4_2, box5_2, box6_2, box7_2, box8_2, box9_2]

        # set the required number of blocks to visible
        block_order = []
        correct_order = []
        respond_block_order = []
        for block in range(2):
            blocks[block].setColor('white')
            respond_blocks[block].setColor('white')
            # responses will be saved as string so we need the correct answer to be in string format
            correct_order.append(respond_blocks[block].name)
            # populate list with coloured block sequence
            block_order.append(blocks[block])
            respond_block_order.append(respond_blocks[block])
        print("block_order", block_order)
        print("correct_order", correct_order)
        print("respond_block_order", respond_block_order)

        # Reverse the correct_order based on nBlocks
        correct_order = correct_order[:nBlocks]  # Ensure correct_order only has nBlocks
        correct_order.reverse()
        thisExp.addData('correct_order', correct_order)

        # set the position of blocks to be random
        # preset some random locations so that the boxes never overlap
        xys = [[0.25625, 0.0975], [0.0675, 0.07375], [-0.09875, 0.065], [-0.26625, 0.235], [0.22, 0.2425], [0.16625, 0.3825], [-0.18625, 0.41125], [-0.01875, 0.235], [-0.3575, -0.05625], [-0.12125, -0.12625], [0.05875, -0.0575], [0.19375, -0.17125], [0.30125, -0.0175], [0.4125, -0.1325], [0.365, -0.27625], [-0.01125, -0.295], [-0.285, -0.27125], [-0.4075, 0.11875], [-0.485, 0.34625], [0.4625, 0.35875], [0.45375, 0.175], [0.54, 0.03625], [0.62875, -0.1825], [0.57875, -0.31375], [-0.45875, -0.3], [-0.55125, -0.13375], [-0.6025, 0.0725], [-0.675, 0.29875], [-0.68625, -0.225], [0.03125, -0.41], [0.1925, -0.295], [-0.16125, -0.28], [-0.24625, 0.04375], [-0.0225, 0.395], [0.28875, 0.39875], [0.6375, 0.27375], [-0.35125, 0.36625]]

        # randomise the coordinates
        shuffle(xys)
        count = 0 # used to iterate through list
        positions = []
        for block in blocks:
            # keep the same block positions
            block.setPos([xys[count][0], xys[count][1]])
            respond_blocks[count].setPos([xys[count][0], xys[count][1]])

            positions.append(xys[count])

            count += 1

        # save positions used to csv output
        thisExp.addData('positions', positions)
    TextComponent blank_2
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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  Routine corsi_respond_t
    RoutineSettingsComponent corsi_respond_t
      saveStartStop = False
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    PolygonComponent box1_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box2_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box3_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box4_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box5_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box6_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box7_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box8_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box9_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent corsi_mouse_t
      clickable = box1_2, box2_2, box3_2, box4_2, box5_2, box6_2, box7_2, box8_2, box9_2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent check_correct_t
      Code Type = Auto->JS
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      Begin Routine:
        # list to keep track which blocks was clicked
        order_clicked = []

        # attribute to show the Submit button
        show = False
      Each Frame:
        for block in respond_blocks:
            if corsi_mouse_t.isPressedIn(block):
                # change clicked block to red
                block.fillColor = [1, 0, 0]
                # prevent list from being populated repeatedly with same block while mouse is being held
                if block.name not in order_clicked:
                    order_clicked.append(block.name)

        # show submit button if amount of blocks clicked is the same as sequence number
        if len(corsi_mouse_t.clicked_name)==2:
            show = True

        if corsi_mouse_t.isPressedIn(submit_button):
            continueRoutine = False
      End Routine:
        # create a variable to store accuracy
        correct = 0
        print('order_clicked', order_clicked)
        print('correct_order', correct_order)

        # create a list to store accuracy
        correct_list = []
        count = 0
        for name in order_clicked:
            if name == correct_order[count]:
                correct_list.append(1) # add value of 1 if block clicked matches the correct order
            else:
                correct_list.append(0) # add 0 if no match
            count += 1
        print(correct_list)
        # e.g. list - [1,1,1] for 3 sequences block

        # save list to csv output
        thisExp.addData('correct_list', correct_list)

        # if the sum of list is equals to number of sequence, the trial is correct
        if sum(correct_list) == len(correct_list):
            correct = 1

        # save correct variable to csv output
        thisExp.addData('corsi_correct', correct)

        ## increase number of blocks if they get it correct
        #if correct:
        #    nBlocks += 1
        #
        #
        ## cap the number of blocks at the max number
        #if nBlocks > len(blocks):
        #    nBlocks = len(blocks)
    TextboxComponent submit_button_t
      bold = False
      editable = False
      fillColor = darkgrey
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = (0.2, 0.1)
      startVal [condition] = show
      text = Submit
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  Routine FB
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    CodeComponent reset_col_code
      Code Type = Both
      Begin JS Routine:
        for (var block, _pj_c = 0, _pj_a = respond_blocks, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            block = _pj_a[_pj_c];
            block.fillColor = new util.Color([1 ,1, 1])
        }

        for (var block, _pj_c = 0, _pj_a = blocks, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            block = _pj_a[_pj_c];
            block.fillColor = new util.Color([1 ,1, 1])
        }
      Begin Routine:
        # reset the colour of all blocks in prep for next trial
        for block in respond_blocks:
            block.fillColor = [1 ,1, 1]

        for block in blocks:
            block.fillColor = [1 ,1, 1]
    CodeComponent end_task
      Code Type = Auto->JS
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      Begin Experiment:
        incorrect_count = 0
      End Routine:
        if not correct:
            incorrect_count += 1

        if incorrect_count > 3:
            corsi_task.finished = True

        if nBlocks == 9:
            corsi_task.finished = True
Flow
  LoopInitiator text_loop loopType="TrialHandler"
    conditionsFile = text.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'text_tutorial': '\nยินดีต้อนรับสู่ corsi task\nแตะหน้าจอเพื่อดำเนินการต่อ'},
      {'text_tutorial': '\nในเกมนี้จะมีกล่องขึ้นมาทั้งหมด 9 กล่อง \nโดยจะมีกล่องกระพริบเป็นลำดับ\nจะเริ่มจาก 3 ลำดับไปจนถึง 7 \nแล้วต้องจำและคลิกตามลำดับนั้นๆ ให้ถูกต้อง\nแตะหน้าจอเพื่อดำเนินการต่อ'}]
    Routine Welcome
  LoopTerminator text_loop
  LoopInitiator photo_loop loopType="TrialHandler"
    conditionsFile = images_t.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'photo': 'Images/photoI.jpg'},
      {'photo': 'Images/photoII.jpg'},
      {'photo': 'Images/photoIII.jpg'},
      {'photo': 'Images/photoIV.jpg'},
      {'photo': 'Images/photoV.jpg'},
      {'photo': 'Images/photoVI.jpg'},
      {'photo': 'Images/photoVII.jpg'}]
    Routine instructions_t
  LoopTerminator photo_loop
  LoopInitiator corsi_task_t loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 4
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    Routine ISI_t
    LoopInitiator block_sequence_t loopType="TrialHandler"
      conditionsFile = CL_t.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('CL', 'white'), ('CL2', 'white')]),
        OrderedDict([('CL', 'red'), ('CL2', 'white')]),
        OrderedDict([('CL', 'white'), ('CL2', 'red')])]
      Routine corsi_present_t
    LoopTerminator block_sequence_t
    Routine corsi_respond_t
    Routine feedback
    Routine instructions
  LoopTerminator corsi_task_t
  Routine countdown
  LoopInitiator corsi_task loopType="TrialHandler"
    loopType = random
    nReps = 15
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    Routine ISI
    LoopInitiator block_sequence loopType="TrialHandler"
      loopType = random
      nReps = nBlocks
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      Routine corsi_present
    LoopTerminator block_sequence
    Routine corsi_respond
    Routine FB
  LoopTerminator corsi_task
  Routine end
